<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics" xmlns:q2="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreateRandom">
          <q2:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:CreateContinuousUniform">
          <q3:Lower>-0.9</q3:Lower>
          <q3:Upper>0.9</q3:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>ViewMatrix</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateOrthographic">
                <q1:Width>2.66666675</q1:Width>
                <q1:Height>2</q1:Height>
                <q1:NearClip>0</q1:NearClip>
                <q1:FarClip>100</q1:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:AspectRatio" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Defer">
        <Name>StartScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Timer">
                <q1:DueTime>PT1S</q1:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>DueTime</MemberName>
              <Name>DueTime</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>TextureName</MemberName>
              <Name>TextureName</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawSprite">
              <TextureName />
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>1</SizeX>
              <SizeY>1</SizeY>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Calibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>60</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationX</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationY</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DelaySubscription">
                <DueTime>PT1S</DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeX</MemberName>
              <Name>TargetSizeX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>SizeY</MemberName>
              <Name>TargetSizeY</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawTarget">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <SizeX>0.1</SizeX>
              <SizeY>0.1</SizeY>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>0</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>12</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>12</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>12</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>12</To>
              <Label>Source5</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Distributions.CreateContinuousUniform, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateOrthographic, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Timer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Last, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Distributions.Sample, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Repeat, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.DelaySubscription, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>